PsychoPy2experiment version="2025.1.1"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['paths.xlsx']
  Screen = 1
  Units = height
  Window size (pixels) = [1710, 1112]
  expName = grouping-vwm-task
  keyboardBackend = PsychToolbox
  measureFrameRate = False
  runMode = 0
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Routines
  Routine start
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    CodeComponent code_JS
      Code Type = JS
      disabled = True
      Before JS Experiment:
        Object.defineProperty(TrialHandler.prototype, "trialIterator", {
          get() {
            return this[Symbol.iterator]();
          }
        });

        TrialHandler.prototype.next = function() {
          const { value } = this.trialIterator.next()

          return value
        }
      Begin JS Experiment:
        thisExp=psychoJS.experiment;
        win=psychoJS.window;
        event=psychoJS.eventManager;
        shuffle = util.shuffle;
      End JS Routine:
        experimentInit();
    CodeComponent code_setup
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        yScale=.40
        minSize = .01
        maxSize = .1
        cuePulse = 3
        pathStart=[0,0]
        pathN = 0
        xScale=win.size[0]/win.size[1]*.45
    CodeComponent code_clock
      Code Type = Both
      disabled = True
      Begin Experiment:
        posClock = core.Clock()
        sizeClock = core.Clock()
      Begin JS Experiment:
        posClock = new util.Clock();
        sizeClock = new util.Clock();
    CodeComponent code_paths
      Code Type = Py
      disabled = True
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      Begin Experiment:
        myPaths = data.TrialHandler(
        nReps=1,
        method='sequential',
        extraInfo=expInfo,
        originPath=-1,
        trialList=data.importConditions('test1_aln_2025-12-01.csv'),
        seed=None,
        name='myTrials')
    TextComponent textBlank
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome! Watch the ball move across the screen

        Press Space to continue
    KeyboardComponent keyContinue2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blank500
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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  Routine memoryInstructions
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    TextComponent Intructions2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You will now be shown the ball at different positions, if the ball was perviously in that position, press F, if not press J

        Press Space to Continue
    KeyboardComponent keyContinue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
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    TextComponent endText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        The experiment is complete

        Thank You!
  Routine jumpy
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    PolygonComponent eclipse
      fillColor = white
      pos [set every repeat] = (xPos, yPos)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine smooth
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    CodeComponent code_moves
      Code Type = Py
      disabled = True
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      Begin Routine:
        # Start at origin
        pathStart = [0, 0]

        # Initialize path index
        pathN = 0

        # Filter myTrials down to just THIS trial (how do I iterate over trials in PsychoPy?)

        # Get first point from Excel loop
        if pathN < len(myPaths.trialList):
            thisPath = myPaths.trialList[pathN]
            pathEnd = [float(thisPath['xPos']), float(thisPath['yPos'])]
        else:
            # No points in Excel, end routine immediately
            continueRoutine = False

        # Movement speed (adjust for smoothness)
        stepSize = 0.005

        # Initial circle position
        cuePos = tuple(pathStart)
      Each Frame:
        # Make sure there is a target
        if pathN >= len(myPaths.trialList):
            continueRoutine = False
        else:
            dx = pathEnd[0] - pathStart[0]
            dy = pathEnd[1] - pathStart[1]
            dist = (dx**2 + dy**2)**0.5

            if dist > stepSize:
                # Move a small step toward the target
                newX = pathStart[0] + dx/dist * stepSize
                newY = pathStart[1] + dy/dist * stepSize
                pathStart = [newX, newY]
                cuePos = (newX, newY)
            else:
                # Snap to target
                pathStart = pathEnd[:]
                cuePos = tuple(pathEnd)

                # Move to next point
                pathN += 1
                if pathN >= len(myPaths.trialList):
                    continueRoutine = False  # reached last point
                else:
                    thisPath = myPaths.trialList[pathN]
                    pathEnd = [float(thisPath['xPos']), float(thisPath['yPos'])]
    PolygonComponent cue
      fillColor = white
      nVertices = 72
      pos [set every frame] = cuePos
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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  Routine memoryTrialSingle
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    PolygonComponent circle
      fillColor = white
      pos [set every frame] = (xPos, yPos)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'f', 'j'
      correctAns = $correctAns
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
      syncScreenRefresh = False
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        circle.pos = (0, 0)
      Begin Routine:
        circle.pos = (0,0)
  Routine spacer
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = this is the end of the single stimuli
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  Routine sequence_1
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    PolygonComponent cir1
      fillColor = white
      pos [set every frame] = (xPos, yPos)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = ppp
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  Routine sequence_2
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    PolygonComponent cir2
      fillColor = white
      pos [set every frame] = (xPos, yPos)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = aaaa
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    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine test
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = is ut worjing
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  Routine memoryTrialSequence
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    PolygonComponent circ
      fillColor = white
      pos [set every frame] = (xPos, yPos)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine test_2
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    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Was the sequence the same as previously
        Press F if it was the same and J if not
    KeyboardComponent key_resp_2
      allowedKeys = 'f', 'j'
      correctAns = $isSame
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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  Routine tester
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    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = one showed up 
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  Routine spacer2
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    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = this is the end of the jumpy
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  Routine VWM_memory_display
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    CodeComponent memory_sequence_code
      Code Type = Py
      Before Experiment:
        import random

        random.seed = 1

        def get_random_path_coord( coords_to_avoid ):
            # Select random x and y values that are different from those in coords_to_avoid
            x = coords_to_avoid[0]
            while abs(x - coords_to_avoid[0]) < 0.2:
                x = round(random.uniform(-1, 1), 1)
            y = coords_to_avoid[1]
            while abs(y - coords_to_avoid[1]) < 0.2:
                y = round(random.uniform(-1, 1), 1)
            coord = (x,y)
            return coord
      Begin Experiment:
        # Set path parameters
        path_length = 5
        pause_duration = 0.2 # 200 ms
        retention_interval = 1.0 # 1000 ms

        # Movement speed (adjust for smoothness)
        step_size = 0.01 # speeding up for debugging
        #step_size = 0.005

        # colors
        white = [1,1,1]
        gray = [0,0,0]
      Begin Routine:
        # Get locations for this trial

        path_coords = []
        ## path coords is a list of (x,y) tuples
        for segment in range(path_length):
            if segment == 0:
                segment_coord = (0,0)
            else:
                segment_coord = get_random_path_coord(path_coords[segment-1])

            path_coords.append(segment_coord)
        #print(path_coords)

        # Initialize path steps
        segment = 0

        # set initial disc position
        disc_position = path_coords[segment]
        disc_color = white

        # start pause timer
        pause_timer = core.CountdownTimer(pause_duration)

        # set initial endpoint
        path_end = path_coords[segment + 1]
      Each Frame:
        # check if we're paused
        while pause_timer.getTime() > 0:
            continue # skip the rest of this

        if segment >= path_length - 1:
            continueRoutine = False  # reached last point
            disc_color = gray
        else:
            # update path end and continue
            path_end = path_coords[segment + 1]

        # get euclidean distance
        dx = path_end[0] - disc_position[0]
        dy = path_end[1] - disc_position[1]

        distance = (dx**2 + dy**2) ** 0.5

        if distance > step_size:
            # move a small step toward the target
            new_x = disc_position[0] + dx * ( step_size / distance )
            new_y = disc_position[1] + dy * ( step_size / distance )
            if memory_type == "continuous":
                disc_color = white
            else:
                disc_color = gray
        else:
            # we've reached the target, snap to position and update segment counter
            new_x = path_end[0]
            new_y = path_end[1]
            disc_color = white
            # start pause timer
            pause_timer = core.CountdownTimer(pause_duration)

            segment = segment + 1



        disc_position = (new_x, new_y)
      End Routine:
        # pause for retention interval
        core.wait(retention_interval)
    PolygonComponent mem_fix
      fillColor = white
      lineColor = gray
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent mem_disc
      fillColor [set every frame] = $disc_color
      lineColor [set every frame] = $disc_color
      pos [set every frame] = disc_position
      shape = circle
      size = (0.1,0.1)
      startVal [time (s)] = 0.0
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  Routine VWM_memory_probe
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    CodeComponent probe_sequence_code
      Code Type = Py
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      Begin Routine:
        # Get locations for this trial

        # by default, we reprise the prior coords
        path_coords_probe = path_coords

        print(trials.thisN)
        print(memory_type)
        print(probe_type)
        print(probe_validity)

        if probe_validity == "lure":
            if probe_type == "continuous":
                # TODO pick segment to swap
                core.wait(0.1)
            elif probe_type == "discrete":
                # generate a lure location
                lure_coords = round(random.uniform(-1,1), 1)
                a = 1
                while a:
                    # check against memory set
                    x_distance[:] = [abs(location[0] - lure_coords[0]) for location in path_coords]
                    y_distance[:] = [abs(location[1] - lure_coords[1]) for location in path_coords]
                    for i in x_distance:
                        if x_distance[i] < 0.2 and y_distance[i] < 0.2:
                            lure_coords = round(random.uniform(-1,1), 1)
                            break
                        else:
                            print(i)
                            print(x_distance[i])
                            print(y_distance[i])
                    a = 0


        else: # probe_validity == target
            if probe_type == "discrete":
                lure_pos = round(random.uniform(1, path_length),0)
                path_coords_probe = path_coords_probe[lure_pos]

        # Initialize path steps
        segment = 0

        # set initial disc position
        disc_position = path_coords_probe[segment]
        disc_color = white

        # start pause timer
        pause_timer = core.CountdownTimer(pause_duration)

        if probe_type == "continuous":
            # set initial endpoint
            path_end = path_coords_probe[segment + 1]
    PolygonComponent probe_fix
      fillColor = white
      lineColor = gray
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent probe_disc
      fillColor [set every frame] = $disc_color
      lineColor [set every frame] = $disc_color
      pos [set every frame] = disc_position
      shape = circle
      size = (0.1,0.1)
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = experiment_control_files/trial-types_aln_2025-12-07.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('memory_type', 'continuous'), ('probe_type', 'discrete'), ('probe_validity', 'target')]),
      OrderedDict([('memory_type', 'continuous'), ('probe_type', 'continuous'), ('probe_validity', 'target')]),
      OrderedDict([('memory_type', 'discrete'), ('probe_type', 'discrete'), ('probe_validity', 'target')]),
      OrderedDict([('memory_type', 'discrete'), ('probe_type', 'continuous'), ('probe_validity', 'target')]),
      OrderedDict([('memory_type', 'continuous'), ('probe_type', 'discrete'), ('probe_validity', 'lure')]),
      OrderedDict([('memory_type', 'continuous'), ('probe_type', 'continuous'), ('probe_validity', 'lure')]),
      OrderedDict([('memory_type', 'discrete'), ('probe_type', 'discrete'), ('probe_validity', 'lure')]),
      OrderedDict([('memory_type', 'discrete'), ('probe_type', 'continuous'), ('probe_validity', 'lure')])]
    Routine VWM_memory_display
    Routine VWM_memory_probe
  LoopTerminator trials
