PsychoPy2experiment version="2025.1.1"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['paths.xlsx']
  Screen = 1
  Units = height
  Window size (pixels) = [1470, 956]
  expName = moving-cue
  keyboardBackend = PsychToolbox
  measureFrameRate = False
  runMode = 0
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Routines
  Routine start
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    CodeComponent code_JS
      Code Type = JS
      Before JS Experiment:
        Object.defineProperty(TrialHandler.prototype, "trialIterator", {
          get() {
            return this[Symbol.iterator]();
          }
        });

        TrialHandler.prototype.next = function() {
          const { value } = this.trialIterator.next()

          return value
        }
      Begin JS Experiment:
        thisExp=psychoJS.experiment;
        win=psychoJS.window;
        event=psychoJS.eventManager;
        shuffle = util.shuffle;
      End JS Routine:
        experimentInit();
    CodeComponent code_setup
      Code Type = Auto->JS
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      Begin Experiment:
        yScale=.40
        minSize = .01
        maxSize = .1
        cuePulse = 3
        pathStart=[0,0]
        pathN = 0
        xScale=win.size[0]/win.size[1]*.45
    CodeComponent code_clock
      Code Type = Both
      Begin Experiment:
        posClock = core.Clock()
        sizeClock = core.Clock()
      Begin JS Experiment:
        posClock = new util.Clock();
        sizeClock = new util.Clock();
    CodeComponent code_paths
      Code Type = Both
      Begin Experiment:
        myPaths = data.TrialHandler(
        nReps=1,
        method='sequential',
        extraInfo=expInfo,
        originPath=-1,
        trialList=data.importConditions('paths.xlsx'),
        seed=None,
        name='myPaths')
      Begin JS Experiment:
        myPaths = new TrialHandler({psychoJS: psychoJS,
            nReps: 1,
            method: TrialHandler.Method.SEQUENTIAL,
            extraInfo: expInfo,
            originPath: undefined,
            trialList: "paths.xlsx",
            seed: undefined,
            name: "myPaths"});
    TextComponent textBlank
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome! Watch the ball move across the screen

        Press Space to continue
    KeyboardComponent keyContinue2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blank500
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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  Routine memoryInstructions
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    TextComponent Intructions2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You will now be shown the ball at different positions, if the ball was perviously in that position, press F, if not press J

        Press Space to Continue
    KeyboardComponent keyContinue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
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    TextComponent endText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        The experiment is complete

        Thank You!
  Routine jumpy
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    PolygonComponent eclipse
      fillColor = white
      pos [set every repeat] = (xPos, yPos)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine smooth
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    CodeComponent code_moves
      Code Type = Py
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      Begin Routine:
        # Start at origin
        pathStart = [0, 0]

        # Initialize path index
        pathN = 0

        # Get first point from Excel loop
        if pathN < len(myPaths.trialList):
            thisPath = myPaths.trialList[pathN]
            pathEnd = [float(thisPath['xPos']), float(thisPath['yPos'])]
        else:
            # No points in Excel, end routine immediately
            continueRoutine = False

        # Movement speed (adjust for smoothness)
        stepSize = 0.005

        # Initial circle position
        cuePos = tuple(pathStart)
      Each Frame:
        # Make sure there is a target
        if pathN >= len(myPaths.trialList):
            continueRoutine = False
        else:
            dx = pathEnd[0] - pathStart[0]
            dy = pathEnd[1] - pathStart[1]
            dist = (dx**2 + dy**2)**0.5

            if dist > stepSize:
                # Move a small step toward the target
                newX = pathStart[0] + dx/dist * stepSize
                newY = pathStart[1] + dy/dist * stepSize
                pathStart = [newX, newY]
                cuePos = (newX, newY)
            else:
                # Snap to target
                pathStart = pathEnd[:]
                cuePos = tuple(pathEnd)

                # Move to next point
                pathN += 1
                if pathN >= len(myPaths.trialList):
                    continueRoutine = False  # reached last point
                else:
                    thisPath = myPaths.trialList[pathN]
                    pathEnd = [float(thisPath['xPos']), float(thisPath['yPos'])]
    PolygonComponent cue
      fillColor = white
      nVertices = 72
      pos [set every frame] = cuePos
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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  Routine memoryTrialSingle
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    PolygonComponent circle
      fillColor = white
      pos [set every frame] = (xPos, yPos)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'f', 'j'
      correctAns = $correctAns
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
      syncScreenRefresh = False
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        circle.pos = (0, 0)
      Begin Routine:
        circle.pos = (0,0)
  Routine spacer
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = this is the end of the single stimuli
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  Routine sequence_1
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    PolygonComponent cir1
      fillColor = white
      pos [set every frame] = (xPos, yPos)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = ppp
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  Routine sequence_2
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    PolygonComponent cir2
      fillColor = white
      pos [set every frame] = (xPos, yPos)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = aaaa
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    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine test
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = is ut worjing
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  Routine memoryTrialSequence
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    PolygonComponent circ
      fillColor = white
      pos [set every frame] = (xPos, yPos)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine test_2
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    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Was the sequence the same as previously
        Press F if it was the same and J if not
    KeyboardComponent key_resp_2
      allowedKeys = 'f', 'j'
      correctAns = $isSame
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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  Routine tester
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    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = one showed up 
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  Routine spacer2
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    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = this is the end of the jumpy
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Flow
  Routine start
  Routine smooth
  Routine blank500
  Routine memoryInstructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = text_positions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'xPos': 0.2, 'yPos': 0.3, 'correctAns': 'f'},
      {'xPos': -0.1, 'yPos': 0.4, 'correctAns': 'f'},
      {'xPos': 0, 'yPos': -0.2, 'correctAns': 'f'},
      {'xPos': 0, 'yPos': 0, 'correctAns': 'j'},
      {'xPos': -0.2, 'yPos': -0.3, 'correctAns': 'j'},
      {'xPos': 0.2, 'yPos': 0.1, 'correctAns': 'j'},
      {'xPos': 0.4, 'yPos': 0.3, 'correctAns': 'f'},
      {'xPos': 0.1, 'yPos': 0.1, 'correctAns': 'j'}]
    Routine memoryTrialSingle
  LoopTerminator trials
  Routine blank500
  Routine spacer
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = text_positions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'xPos': 0.2, 'yPos': 0.3, 'correctAns': 'f'},
      {'xPos': -0.1, 'yPos': 0.4, 'correctAns': 'f'},
      {'xPos': 0, 'yPos': -0.2, 'correctAns': 'f'},
      {'xPos': 0, 'yPos': 0, 'correctAns': 'j'},
      {'xPos': -0.2, 'yPos': -0.3, 'correctAns': 'j'},
      {'xPos': 0.2, 'yPos': 0.1, 'correctAns': 'j'},
      {'xPos': 0.4, 'yPos': 0.3, 'correctAns': 'f'},
      {'xPos': 0.1, 'yPos': 0.1, 'correctAns': 'j'}]
    Routine jumpy
  LoopTerminator trials_2
  Routine spacer2
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = sequenceTrials.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'originalPathFile': 'seq1.xlsx', 'testPathFile': 'seq1.xlsx', 'isSame': 1},
      {'originalPathFile': 'seq2.xlsx', 'testPathFile': 'seq3.xlsx', 'isSame': 0},
      {'originalPathFile': 'seq3.xlsx', 'testPathFile': 'seq3.xlsx', 'isSame': 1}]
    LoopInitiator trials_3 loopType="TrialHandler"
      conditionsFile = $testPathFile
      loopType = random
      nReps = 1
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      conditions:
        [{'xPos': 0.3, 'yPos': 0.2},
        {'xPos': 0.1, 'yPos': 0.4},
        {'xPos': 0.6, 'yPos': 0.8}]
      Routine memoryTrialSequence
    LoopTerminator trials_3
    Routine test_2
  LoopTerminator trials_4
  Routine end
